PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Word_Priming_Experiment
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Test
    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Test_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent Submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = Submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Study_word': 'Book'},
      {'Study_word': 'Cushion'},
      {'Study_word': 'Phone'},
      {'Study_word': 'Marble'},
      {'Study_word': 'Board'},
      {'Study_word': 'Laptop'},
      {'Study_word': 'Chart'},
      {'Study_word': 'Tshirt'},
      {'Study_word': 'Mouse'},
      {'Study_word': 'Pastry'},
      {'Study_word': 'Case'},
      {'Study_word': 'Cruise'},
      {'Study_word': 'Police'},
      {'Study_word': 'Keys'},
      {'Study_word': 'Poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Test_word': 'L_pt_p', 'Reference': 'Laptop', 'Old_new': 'Old'},
      {'Test_word': '_ha_t', 'Reference': 'Chart', 'Old_new': 'Old'},
      {'Test_word': 'T_hi_t', 'Reference': 'Tshirt', 'Old_new': 'Old'},
      {'Test_word': '_ou_se', 'Reference': 'Mouse', 'Old_new': 'Old'},
      {'Test_word': 'P_s_r_', 'Reference': 'Pastry', 'Old_new': 'Old'},
      {'Test_word': 'C_s_', 'Reference': 'Case', 'Old_new': 'Old'},
      {'Test_word': '_ru_s_', 'Reference': 'Cruise', 'Old_new': 'Old'},
      {'Test_word': 'P_li_e', 'Reference': 'Police', 'Old_new': 'Old'},
      {'Test_word': 'K_y_', 'Reference': 'Keys', 'Old_new': 'Old'},
      {'Test_word': 'P_st_r', 'Reference': 'Poster', 'Old_new': 'Old'},
      {'Test_word': '_o_rd', 'Reference': 'Board', 'Old_new': 'Old'},
      {'Test_word': '_a_bl_', 'Reference': 'Marble', 'Old_new': 'Old'},
      {'Test_word': '_ho_e', 'Reference': 'Phone', 'Old_new': 'Old'},
      {'Test_word': '_oo_', 'Reference': 'Book', 'Old_new': 'Old'},
      {'Test_word': 'C_s_io_', 'Reference': 'Cushion', 'Old_new': 'Old'},
      {'Test_word': 'Ta_l_', 'Reference': 'Table', 'Old_new': 'New'},
      {'Test_word': 'P_nc_l', 'Reference': 'Pencil', 'Old_new': 'New'},
      {'Test_word': 'V_s_', 'Reference': 'Vase', 'Old_new': 'New'},
      {'Test_word': 'Bo_t_e', 'Reference': 'Bottle', 'Old_new': 'New'},
      {'Test_word': 'C_m_ra', 'Reference': 'Camera', 'Old_new': 'New'}]
    Routine Test
  LoopTerminator trials_2
